PsychoPy2experiment version="3.2.4"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = script
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Routines
  Routine trial
    TextComponent text1
      color = blue
      letterHeight = 0.1
      pos = (-0.75, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 16.0
      text [set every repeat] = $word1
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    SoundComponent sound1
      sound [set every repeat] = $wrecord1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
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    TextComponent text2
      color = blue
      letterHeight = 0.1
      pos = (-0.25, 0)
      startVal [time (s)] = 4.0
      stopVal [duration (s)] = 12.0
      text [set every repeat] = $word2
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    SoundComponent sound2
      sound [set every repeat] = $wrecord2
      startVal [time (s)] = 4.0
      stopVal [duration (s)] = 4.0
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    TextComponent prime_text
      color = blue
      letterHeight = 0.1
      pos = (0.25, 0)
      startVal [time (s)] = 8.0
      stopVal [duration (s)] = 8.0
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      text [set every repeat]:
        $prime
    SoundComponent prime_sound
      sound [set every repeat] = $precord3
      startVal [time (s)] = 8
      stopVal [duration (s)] = 4
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    TextComponent target_text
      color = red
      letterHeight = 0.1
      pos = (0.75, 0)
      startVal [time (s)] = 12.0
      stopVal [duration (s)] = 4.0
      text [set every repeat] = $target
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    MicrophoneComponent pan_record
      channel = 0
      startVal [time (s)] = 12.0
      stereo = False
      stopVal [duration (s)] = 4.0
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    TextComponent record_notification
      letterHeight = 0.1
      pos = (0, -0.5)
      startVal [time (s)] = 12.0
      stopVal [duration (s)] = 4.0
      text [set every repeat] = Please say the word: pan
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  Routine End
    TextComponent End_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Thank you for completing the session.

        Please see the researcher for further instructions.
    KeyboardComponent key_resp
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine practice
    TextComponent text1_2
      color = blue
      letterHeight = 0.1
      pos = (-0.75, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 16.0
      text [set every repeat] = $word1
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    SoundComponent sound1_2
      sound [set every repeat] = $wrecord1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
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    TextComponent text2_2
      color = blue
      letterHeight = 0.1
      pos = (-0.25, 0)
      startVal [time (s)] = 4.0
      stopVal [duration (s)] = 12.0
      text [set every repeat] = $word2
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    SoundComponent sound2_2
      sound [set every repeat] = $wrecord2
      startVal [time (s)] = 4.0
      stopVal [duration (s)] = 4.0
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    TextComponent prime_text_2
      color = blue
      letterHeight = 0.1
      pos = (0.25, 0)
      startVal [time (s)] = 8.0
      stopVal [duration (s)] = 8.0
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      text [set every repeat]:
        $prime
    SoundComponent prime_sound_2
      sound [set every repeat] = $precord3
      startVal [time (s)] = 8
      stopVal [duration (s)] = 4
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    TextComponent target_text_2
      color = red
      letterHeight = 0.1
      pos = (0.75, 0)
      startVal [time (s)] = 12.0
      stopVal [duration (s)] = 4.0
      text [set every repeat] = $target
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    MicrophoneComponent pan_record_2
      channel = 0
      startVal [time (s)] = 12.0
      stereo = False
      stopVal [duration (s)] = 4.0
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    TextComponent record_notification_2
      letterHeight = 0.1
      pos = (0, -0.5)
      startVal [time (s)] = 12.0
      stopVal [duration (s)] = 4.0
      text [set every repeat] = Please say the word: pan
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    TextComponent instruction
      letterHeight = 0.05
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 16
      text = Please view and listen to the blue words and pronounce the red word as soon as you see it.
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  Routine practice_instruction
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = To familiarize you with the task, we ask you to first complete a few practices.
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    TextComponent text_2
      color = Red
      letterHeight = 0.05
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      text = Press the space key to proceed.
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Begin
    TextComponent instructiontext
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        In this study, you will perform a simple task of looking at, listening to and speaking some words in English and Mandarin.

        Specifically, you will first view and listen to a short list of individual words in blue.

        Then you will read out loud a red word as fast as you can when it shows up on the screen.
    KeyboardComponent key_resp_instruction
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent Key
      color = Red
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text = Press the space key to proceed.
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  Routine trail_instruction
    TextComponent text_3
      letterHeight = 0.05
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      text = Thank you for completing the practice.
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    TextComponent text_4
      color = Red
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Please press the space key to proceed to the actual study. 
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    TextComponent text_5
      letterHeight = 0.05
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      text = Note that the task is the same as the practice. 
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    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine trail_Start
    TextComponent text_6
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = Actual trials start.
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Flow
  Routine Begin
  Routine practice_instruction
  LoopInitiator practices loopType="TrialHandler"
    conditionsFile = Practice condition.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('word1', 'Eye'), ('word2', 'Cap'), ('prime', 'Pun'), ('target', '潘'), ('wrecord1', 'Eye.wav'), ('wrecord2', 'Cap.wav'), ('precord3', 'Pun.wav'), ('Rname', '潘_close_English')]),
      OrderedDict([('word1', 'Ids'), ('word2', 'gsd'), ('prime', 'fgh'), ('target', '怕'), ('wrecord1', 'Eye.wav'), ('wrecord2', 'Cap.wav'), ('precord3', 'Pun.wav'), ('Rname', '怕_close_English')])]
    Routine practice
  LoopTerminator practices
  Routine trail_instruction
  Routine trail_Start
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('word1', 'Eye'), ('word2', 'Cap'), ('prime', 'Pun'), ('target', '潘'), ('wrecord1', 'Eye.wav'), ('wrecord2', 'Cap.wav'), ('precord3', 'Pun.wav'), ('Rname', 'Prime Item: 潘.close.English')]),
      OrderedDict([('word1', 'Ids'), ('word2', 'gsd'), ('prime', 'fgh'), ('target', '怕'), ('wrecord1', 'Eye.wav'), ('wrecord2', 'Cap.wav'), ('precord3', 'Pun.wav'), ('Rname', 'Prime Item: 怕e.English')])]
    Routine trial
  LoopTerminator trials
  Routine End
